<XDL>
  <Synthesis>
    <Hardware>
      <Component id="S-1" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-1"/>
    <Procedure>
      <Prep>
        <Add amount="16.0 milligram" reagent="FeCl3" vessel="S-1"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-1"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-1"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 60.0}" time="1.0 day" vessel="S-1"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-1"/>
        <WashSolid solvent="DMF" vessel="S-1"/>
        <WashSolid solvent="chcl3" vessel="S-1"/>
        <WashSolid solvent="meoh" vessel="S-1"/>
        <Wait time="24.0 hour" vessel="S-1"/>
        <WashSolid solvent="scCO2" vessel="S-1"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-2" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-2"/>
    <Procedure>
      <Prep>
        <Add amount="16.0 milligram" reagent="FeCl3" vessel="S-2"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-2"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-2"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 80.0}" time="1.0 day" vessel="S-2"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-2"/>
        <WashSolid solvent="DMF" vessel="S-2"/>
        <WashSolid solvent="chcl3" vessel="S-2"/>
        <WashSolid solvent="meoh" vessel="S-2"/>
        <Wait time="24.0 hour" vessel="S-2"/>
        <WashSolid solvent="scCO2" vessel="S-2"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-3" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-3"/>
    <Procedure>
      <Prep>
        <Add amount="16.0 milligram" reagent="FeCl3" vessel="S-3"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-3"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-3"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 100.0}" time="1.0 day" vessel="S-3"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-3"/>
        <WashSolid solvent="DMF" vessel="S-3"/>
        <WashSolid solvent="chcl3" vessel="S-3"/>
        <WashSolid solvent="meoh" vessel="S-3"/>
        <Wait time="24.0 hour" vessel="S-3"/>
        <WashSolid solvent="scCO2" vessel="S-3"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-4" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-4"/>
    <Procedure>
      <Prep>
        <Add amount="16.0 milligram" reagent="FeCl3" vessel="S-4"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-4"/>
        <Add amount="4.0 millilitre" reagent="Dry DMF" vessel="S-4"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 120.0}" time="1.0 day" vessel="S-4"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-4"/>
        <WashSolid solvent="DMF" vessel="S-4"/>
        <WashSolid solvent="chcl3" vessel="S-4"/>
        <WashSolid solvent="meoh" vessel="S-4"/>
        <Wait time="24.0 hour" vessel="S-4"/>
        <WashSolid solvent="scCO2" vessel="S-4"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="Dry DMF" name="Dry DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-5" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-5"/>
    <Procedure>
      <Prep>
        <Add amount="16.0 milligram" reagent="FeCl3" vessel="S-5"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-5"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-5"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 120.0}" time="1.0 day" vessel="S-5"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-5"/>
        <WashSolid solvent="DMF" vessel="S-5"/>
        <WashSolid solvent="chcl3" vessel="S-5"/>
        <WashSolid solvent="meoh" vessel="S-5"/>
        <Wait time="24.0 hour" vessel="S-5"/>
        <WashSolid solvent="scCO2" vessel="S-5"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-6" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-6"/>
    <Procedure>
      <Prep>
        <Add amount="16.0 milligram" reagent="FeCl3" vessel="S-6"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-6"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-6"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 120.0}" time="1.0 hour" vessel="S-6"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-6"/>
        <WashSolid solvent="DMF" vessel="S-6"/>
        <WashSolid solvent="chcl3" vessel="S-6"/>
        <WashSolid solvent="meoh" vessel="S-6"/>
        <Wait time="24.0 hour" vessel="S-6"/>
        <WashSolid solvent="scCO2" vessel="S-6"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-7" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-7"/>
    <Procedure>
      <Prep>
        <Add amount="16.0 milligram" reagent="FeCl3" vessel="S-7"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-7"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-7"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 140.0}" time="2.0 hour" vessel="S-7"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-7"/>
        <WashSolid solvent="DMF" vessel="S-7"/>
        <WashSolid solvent="chcl3" vessel="S-7"/>
        <WashSolid solvent="meoh" vessel="S-7"/>
        <Wait time="24.0 hour" vessel="S-7"/>
        <WashSolid solvent="scCO2" vessel="S-7"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-8" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-8"/>
    <Procedure>
      <Prep>
        <Add amount="16.0 milligram" reagent="FeCl3" vessel="S-8"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-8"/>
        <Add amount="4.0 millilitre" reagent="DMF, NaOH" vessel="S-8"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 120.0}" time="1.0 day" vessel="S-8"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-8"/>
        <WashSolid solvent="DMF" vessel="S-8"/>
        <WashSolid solvent="chcl3" vessel="S-8"/>
        <WashSolid solvent="meoh" vessel="S-8"/>
        <Wait time="24.0 hour" vessel="S-8"/>
        <WashSolid solvent="scCO2" vessel="S-8"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF, NaOH" name="DMF, NaOH" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-9" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-9"/>
    <Procedure>
      <Prep>
        <Add amount="16.0 milligram" reagent="FeCl3" vessel="S-9"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-9"/>
        <Add amount="4.0 millilitre" reagent="DMF, HCI" vessel="S-9"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 120.0}" time="1.0 day" vessel="S-9"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-9"/>
        <WashSolid solvent="DMF" vessel="S-9"/>
        <WashSolid solvent="chcl3" vessel="S-9"/>
        <WashSolid solvent="meoh" vessel="S-9"/>
        <Wait time="24.0 hour" vessel="S-9"/>
        <WashSolid solvent="scCO2" vessel="S-9"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF, HCI" name="DMF, HCI" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-10" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-10"/>
    <Procedure>
      <Prep>
        <Add amount="27.0 milligram" reagent="FeCl3-6H2O" vessel="S-10"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-10"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-10"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 60.0}" time="1.0 day" vessel="S-10"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-10"/>
        <WashSolid solvent="DMF" vessel="S-10"/>
        <WashSolid solvent="chcl3" vessel="S-10"/>
        <WashSolid solvent="meoh" vessel="S-10"/>
        <Wait time="24.0 hour" vessel="S-10"/>
        <WashSolid solvent="scCO2" vessel="S-10"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3-6H2O" name="FeCl3-6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-11" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-11"/>
    <Procedure>
      <Prep>
        <Add amount="27.0 milligram" reagent="FeCl3-6H2O" vessel="S-11"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-11"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-11"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 80.0}" time="1.0 day" vessel="S-11"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-11"/>
        <WashSolid solvent="DMF" vessel="S-11"/>
        <WashSolid solvent="chcl3" vessel="S-11"/>
        <WashSolid solvent="meoh" vessel="S-11"/>
        <Wait time="24.0 hour" vessel="S-11"/>
        <WashSolid solvent="scCO2" vessel="S-11"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3-6H2O" name="FeCl3-6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-12" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-12"/>
    <Procedure>
      <Prep>
        <Add amount="27.0 milligram" reagent="FeCl3�6H2O" vessel="S-12"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-12"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-12"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 100.0}" time="1.0 day" vessel="S-12"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-12"/>
        <WashSolid solvent="DMF" vessel="S-12"/>
        <WashSolid solvent="chcl3" vessel="S-12"/>
        <WashSolid solvent="meoh" vessel="S-12"/>
        <Wait time="24.0 hour" vessel="S-12"/>
        <WashSolid solvent="scCO2" vessel="S-12"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3�6H2O" name="FeCl3�6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-13" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-13"/>
    <Procedure>
      <Prep>
        <Add amount="27.0 milligram" reagent="FeCl3�6H2O" vessel="S-13"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-13"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-13"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 120.0}" time="1.0 day" vessel="S-13"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-13"/>
        <WashSolid solvent="DMF" vessel="S-13"/>
        <WashSolid solvent="chcl3" vessel="S-13"/>
        <WashSolid solvent="meoh" vessel="S-13"/>
        <Wait time="24.0 hour" vessel="S-13"/>
        <WashSolid solvent="scCO2" vessel="S-13"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3�6H2O" name="FeCl3�6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-14" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-14"/>
    <Procedure>
      <Prep>
        <Add amount="27.0 milligram" reagent="FeCl3-6H2O" vessel="S-14"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-14"/>
        <Add amount="4.0 millilitre" reagent="DMF" vessel="S-14"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 140.0}" time="2.0 hour" vessel="S-14"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-14"/>
        <WashSolid solvent="DMF" vessel="S-14"/>
        <WashSolid solvent="chcl3" vessel="S-14"/>
        <WashSolid solvent="meoh" vessel="S-14"/>
        <Wait time="24.0 hour" vessel="S-14"/>
        <WashSolid solvent="scCO2" vessel="S-14"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3-6H2O" name="FeCl3-6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-15" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-15"/>
    <Procedure>
      <Prep>
        <Add amount="27.0 milligram" reagent="FeCl3-6H2O" vessel="S-15"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-15"/>
        <Add amount="4.0 millilitre" reagent="DMF, NaOH" vessel="S-15"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 120.0}" time="1.0 day" vessel="S-15"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-15"/>
        <WashSolid solvent="DMF" vessel="S-15"/>
        <WashSolid solvent="chcl3" vessel="S-15"/>
        <WashSolid solvent="meoh" vessel="S-15"/>
        <Wait time="24.0 hour" vessel="S-15"/>
        <WashSolid solvent="scCO2" vessel="S-15"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3-6H2O" name="FeCl3-6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF, NaOH" name="DMF, NaOH" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-16" type="vial"/>
    </Hardware>
    <Metadata description="Esen_S-16"/>
    <Procedure>
      <Prep>
        <Add amount="27.0 milligram" reagent="FeCl3-6H2O" vessel="S-16"/>
        <Add amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid" vessel="S-16"/>
        <Add amount="4.0 millilitre" reagent="DMF, HCI" vessel="S-16"/>
      </Prep>
      <Reaction>
        <HeatChill temp="{'Unit': 'celsius', 'Value': 120.0}" time="1.0 day" vessel="S-16"/>
      </Reaction>
      <Workup>
        <WashSolid solvent="ethanol" vessel="S-16"/>
        <WashSolid solvent="DMF" vessel="S-16"/>
        <WashSolid solvent="chcl3" vessel="S-16"/>
        <WashSolid solvent="meoh" vessel="S-16"/>
        <Wait time="24.0 hour" vessel="S-16"/>
        <WashSolid solvent="scCO2" vessel="S-16"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3-6H2O" name="FeCl3-6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF, HCI" name="DMF, HCI" role="solvent"/>
      <Reagent id="ethanol" name="ethanol" role="solvent"/>
      <Reagent id="chcl3" name="chcl3" role="solvent"/>
      <Reagent id="meoh" name="meoh" role="solvent"/>
      <Reagent id="scCO2" name="scCO2" role="solvent"/>
    </Reagents>
  </Synthesis>
</XDL>
