<XDL>
  <Synthesis>
    <Hardware>
      <Component id="vial" type="vial"/>
    </Hardware>
    <Metadata description="MS-R11"/>
    <Procedure>
      <Prep>
        <Add vessel="vial" amount="388.0 milligram" reagent="ZrOCl2 8H2O"/>
        <Add vessel="vial" amount="160.0 milligram" reagent="H4TBAPy"/>
        <Add vessel="vial" amount="10800.0 milligram" reagent="benzoic acid"/>
        <Add vessel="vial" amount="32000.0 microlitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <HeatChill vessel="vial" temp="120.0 celsius" time="12.0 hour"/>
      </Reaction>
      <Workup/>
    </Procedure>
    <Reagents>
      <Reagent id="ZrOCl2 8H2O" inchi="InChI=1S/2ClH.9H2O.Zr/h2*1H;9*1H2;/q;;;;;;;;;;;+4/p-4" name="ZrOCl2 8H2O" role="reagent"/>
      <Reagent id="H4TBAPy" inchi="InChI=1S/C44H26O8/c45-41(46)27-9-1-23(2-10-27)35-21-36(24-3-11-28(12-4-24)42(47)48)32-19-20-34-38(26-7-15-30(16-8-26)44(51)52)22-37(25-5-13-29(14-6-25)43(49)50)33-18-17-31(35)39(32)40(33)34/h1-22H,(H,45,46)(H,47,48)(H,49,50)(H,51,52)" name="H4TBAPy" role="substrate"/>
      <Reagent id="benzoic acid" inchi="InChI=1S/C7H6O2/c8-7(9)6-4-2-1-3-5-6/h1-5H,(H,8,9)" name="benzoic acid" role="reagent"/>
      <Reagent id="DMF" inchi="InChI=1S/C3H7NO/c1-4(2)3-5/h3H,1-2H3" name="DMF" role="reagent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="vial" type="vial"/>
    </Hardware>
    <Metadata description="MS-R13"/>
    <Procedure>
      <Prep>
        <Add vessel="vial" amount="388.0 milligram" reagent="ZrOCl2 8H2O"/>
        <Add vessel="vial" amount="160.0 milligram" reagent="H4TBAPy"/>
        <Add vessel="vial" amount="10800.0 milligram" reagent="BzOH"/>
        <Add vessel="vial" amount="32000.0 microlitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <HeatChill vessel="vial" temp="100.0 celsius" time="16.0 hour"/>
      </Reaction>
      <Workup/>
    </Procedure>
    <Reagents>
      <Reagent id="ZrOCl2 8H2O" inchi="InChI=1S/2ClH.9H2O.Zr/h2*1H;9*1H2;/q;;;;;;;;;;;+4/p-4" name="ZrOCl2 8H2O" role="reagent"/>
      <Reagent id="H4TBAPy" inchi="InChI=1S/C44H26O8/c45-41(46)27-9-1-23(2-10-27)35-21-36(24-3-11-28(12-4-24)42(47)48)32-19-20-34-38(26-7-15-30(16-8-26)44(51)52)22-37(25-5-13-29(14-6-25)43(49)50)33-18-17-31(35)39(32)40(33)34/h1-22H,(H,45,46)(H,47,48)(H,49,50)(H,51,52)" name="H4TBAPy" role="substrate"/>
      <Reagent id="BzOH" inchi="InChI=1S/C7H6O2/c8-7(9)6-4-2-1-3-5-6/h1-5H,(H,8,9)" name="BzOH" role="reagent"/>
      <Reagent id="DMF" inchi="InChI=1S/C3H7NO/c1-4(2)3-5/h3H,1-2H3" name="DMF" role="reagent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="100.0ml_vial" type="100.0ml_vial"/>
    </Hardware>
    <Metadata description="MS-R19"/>
    <Procedure>
      <Prep>
        <Add vessel="100.0ml_vial" amount="388.0 milligram" reagent="ZrOCl2 8H2O"/>
        <Add vessel="100.0ml_vial" amount="160.0 milligram" reagent="H4TBAPy"/>
        <Add vessel="100.0ml_vial" amount="10800.0 milligram" reagent="BzOH"/>
        <Add vessel="100.0ml_vial" amount="32.0 milligram" reagent="DMF"/>
      </Prep>
      <Reaction>
        <HeatChill vessel="100.0ml_vial" temp="100.0 celsius" time="15.5 hour"/>
      </Reaction>
      <Workup/>
    </Procedure>
    <Reagents>
      <Reagent id="ZrOCl2 8H2O" inchi="InChI=1S/2ClH.9H2O.Zr/h2*1H;9*1H2;/q;;;;;;;;;;;+4/p-4" name="ZrOCl2 8H2O" role="reagent"/>
      <Reagent id="H4TBAPy" inchi="InChI=1S/C44H26O8/c45-41(46)27-9-1-23(2-10-27)35-21-36(24-3-11-28(12-4-24)42(47)48)32-19-20-34-38(26-7-15-30(16-8-26)44(51)52)22-37(25-5-13-29(14-6-25)43(49)50)33-18-17-31(35)39(32)40(33)34/h1-22H,(H,45,46)(H,47,48)(H,49,50)(H,51,52)" name="H4TBAPy" role="substrate"/>
      <Reagent id="BzOH" inchi="InChI=1S/C7H6O2/c8-7(9)6-4-2-1-3-5-6/h1-5H,(H,8,9)" name="BzOH" role="reagent"/>
      <Reagent id="DMF" inchi="InChI=1S/C3H7NO/c1-4(2)3-5/h3H,1-2H3" name="DMF" role="reagent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="vial" type="vial"/>
    </Hardware>
    <Metadata description="MS-R4"/>
    <Procedure>
      <Prep>
        <Add vessel="vial" amount="1964.837 milligram" reagent="ZrOCl2 8H2O"/>
        <Add vessel="vial" amount="800.0 milligram" reagent="H4TBAPy"/>
        <Add vessel="vial" amount="54000.0 milligram" reagent="BzOH"/>
        <Add vessel="vial" amount="160000.0 microlitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <HeatChill vessel="vial" temp="120.0 celsius" time="16.0 hour"/>
      </Reaction>
      <Workup/>
    </Procedure>
    <Reagents>
      <Reagent id="ZrOCl2 8H2O" inchi="InChI=1S/2ClH.9H2O.Zr/h2*1H;9*1H2;/q;;;;;;;;;;;+4/p-4" name="ZrOCl2 8H2O" role="reagent"/>
      <Reagent id="H4TBAPy" inchi="InChI=1S/C44H26O8/c45-41(46)27-9-1-23(2-10-27)35-21-36(24-3-11-28(12-4-24)42(47)48)32-19-20-34-38(26-7-15-30(16-8-26)44(51)52)22-37(25-5-13-29(14-6-25)43(49)50)33-18-17-31(35)39(32)40(33)34/h1-22H,(H,45,46)(H,47,48)(H,49,50)(H,51,52)" name="H4TBAPy" role="substrate"/>
      <Reagent id="BzOH" inchi="InChI=1S/C7H6O2/c8-7(9)6-4-2-1-3-5-6/h1-5H,(H,8,9)" name="BzOH" role="reagent"/>
      <Reagent id="DMF" inchi="InChI=1S/C3H7NO/c1-4(2)3-5/h3H,1-2H3" name="DMF" role="reagent"/>
    </Reagents>
  </Synthesis>
</XDL>
